<?xml version='1.0' encoding='UTF-8'?>
<!--
This CellML file was generated on 3/04/2014 at 12:12:01 at p.m. using:

COR (0.9.31.1409)
Copyright 2002-2014 Dr Alan Garny
http://cor.physiol.ox.ac.uk/ - cor@physiol.ox.ac.uk

CellML 1.0 was used to generate this model
http://www.cellml.org/
%-->
<model cmeta:id="limitgrowth" name="limitgrowth" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <units name="timeunit">
        <unit units="second"/>
    </units>
    <units name="per_timeunit">
        <unit exponent="-1" units="second"/>
    </units>
    <component name="main">
        <variable initial_value="1.0" name="fibrealpha" units="per_timeunit"/>
        <variable initial_value="1.0" name="fibrebeta" units="dimensionless"/>
        <variable initial_value="1.0" name="fibregamma" units="dimensionless"/>
        <variable initial_value="1.0" name="sheetalpha" units="per_timeunit"/>
        <variable initial_value="1.0" name="sheetbeta" units="dimensionless"/>
        <variable initial_value="1.0" name="sheetgamma" units="dimensionless"/>
        <variable initial_value="1.0" name="normalalpha" units="per_timeunit"/>
        <variable initial_value="1.0" name="normalbeta" units="dimensionless"/>
        <variable initial_value="1.0" name="normalgamma" units="dimensionless"/>
        <variable initial_value="0.0" name="fibresheetalpha" units="per_timeunit"/>
        <variable initial_value="0.0" name="fibresheetbeta" units="dimensionless"/>
        <variable initial_value="0.0" name="fibresheetgamma" units="dimensionless"/>
        <variable initial_value="0.0" name="fibrenormalalpha" units="per_timeunit"/>
        <variable initial_value="0.0" name="fibrenormalbeta" units="dimensionless"/>
        <variable initial_value="0.0" name="fibrenormalgamma" units="dimensionless"/>
        <variable initial_value="0.0" name="sheetnormalalpha" units="per_timeunit"/>
        <variable initial_value="0.0" name="sheetnormalbeta" units="dimensionless"/>
        <variable initial_value="0.0" name="sheetnormalgamma" units="dimensionless"/>
        <variable name="time" units="timeunit"/>
        <variable initial_value="1.0" name="lambdaf" units="dimensionless"/>
        <variable initial_value="1.0" name="lambdas" units="dimensionless"/>
        <variable initial_value="1.0" name="lambdan" units="dimensionless"/>
        <variable initial_value="0.0" name="lambdafs" units="dimensionless"/>
        <variable initial_value="0.0" name="lambdafn" units="dimensionless"/>
        <variable initial_value="0.0" name="lambdasn" units="dimensionless"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>lambdaf</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci>fibrealpha</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>fibrebeta</ci>
                        <ci>fibregamma</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>lambdas</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci>sheetalpha</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>sheetbeta</ci>
                        <ci>sheetgamma</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>lambdan</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci>normalalpha</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>normalbeta</ci>
                        <ci>normalgamma</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>lambdafs</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci>fibresheetalpha</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>fibresheetbeta</ci>
                        <ci>fibresheetgamma</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>lambdafn</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci>fibrenormalalpha</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>fibrenormalbeta</ci>
                        <ci>fibrenormalgamma</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>lambdasn</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <ci>sheetnormalalpha</ci>
                    </apply>
                    <apply>
                        <minus/>
                        <ci>sheetnormalbeta</ci>
                        <ci>sheetnormalgamma</ci>
                    </apply>
                </apply>
            </apply>
        </math>
    </component>
</model>
